<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:Format>
                  <vid:FrameSize>
                    <vid:Width>1024</vid:Width>
                    <vid:Height>768</vid:Height>
                  </vid:FrameSize>
                  <vid:AverageFrameRate>30</vid:AverageFrameRate>
                  <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
                  <vid:BitCount>24</vid:BitCount>
                </vid:Format>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>109</cv:X>
                  <cv:Y>59</cv:Y>
                  <cv:Width>804</cv:Width>
                  <cv:Height>666</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\jfo2\Desktop\bonsai_output_test\1117_chamber_01_video_output_.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\jfo2\Desktop\bonsai_output_test\1117_chamber_01_video_timestamps_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>